PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1200, 600]
  expName = asrt
  keyboardBackend = ioHub
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Routines
  Routine Submarine
    ImageComponent in_sea
      image [set every repeat] = $submarine_image
      pos = (0, 0.1)
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent button2
      fillColor = 1.0000, -0.0039, -0.3725
      lineColor = 1.0000, -0.0039, -0.3725
      pos = (0, -0.4)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = button2
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine Fish
    PolygonComponent circle01
      fillColor = white
      pos = (-0.6, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent circle02
      fillColor = white
      pos = (-0.2, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent circle03
      fillColor = white
      pos = (0.2, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent circle04
      fillColor = white
      pos = (0.6, 0)
      shape = circle
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent cue
      image [set every repeat] = $fish_image
      mask = circle
      pos [set every repeat] = (position_x, 0)
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    MouseComponent resp
      clickable = cue
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator epochs loopType="TrialHandler"
    conditionsFile = epoch_condition.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'submarine_image': 'images/submarine_in_sea1.png', 'fish_image': 'images/dorycolor01.png'},
      {'submarine_image': 'images/submarine_in_sea2.jpg', 'fish_image': 'images/Gill402.png'},
      {'submarine_image': 'images/submarine_in_sea3.jpg', 'fish_image': 'images/nemo-coloured03.png'},
      {'submarine_image': 'images/submarine_in_sea4.jpg', 'fish_image': 'images/pufferfish04.jpg'},
      {'submarine_image': 'images/submarine_in_sea5.jpg', 'fish_image': 'images/yellowfish205.jpg'}]
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 4
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      Routine Submarine
      LoopInitiator stimulus loopType="TrialHandler"
        conditionsFile = stimulus_conditions.xlsx
        loopType = random
        nReps = 1
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        conditions:
          [{'position_x': -0.6},
          {'position_x': -0.2},
          {'position_x': 0.2},
          {'position_x': 0.6}]
        Routine Fish
      LoopTerminator stimulus
    LoopTerminator trials
  LoopTerminator epochs
